PsychoPy2experiment version="1.64.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text_1
      text = X
      duration = 1.0
      letterHeight = 5
      startTime = 0.0
      units = deg
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    PatchComponent patch_1
      image = sin
      mask = gauss
      pos = [1, 0]
      duration = 0.07
      startTime = 2
      units = deg
      sf = None
      size = [1.5, 1.5]
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    SoundComponent sound_1
      sound = tink.wav
      duration = 0.02
      startTime = 2
    SoundComponent sound_2
      sound = tink.wav
      duration = 0.02
      startTime = 2.15
    TextComponent text_2
      text = ?
      duration = 5.0
      letterHeight = 5
      startTime = 4.0
      units = deg
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Flow
  Routine trial
