PsychoPy2experiment version="1.64.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text_1
      text = X
      duration = 1.0
      letterHeight = 5
      startTime = 0.0
      units = deg
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    PatchComponent patch_1
      image = sin
      mask = gauss
      pos = [1, 0]
      duration = 0.05
      startTime = 2
      units = deg
      sf = None
      size = [1.5, 1.5]
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    SoundComponent sound_1
      sound = tink.wav
      duration = 0.02
      startTime = 2
    SoundComponent sound_2
      sound = tink.wav
      duration = 0.02
      startTime = 2.10
    TextComponent text_2
      text = ?
      duration = 5.0
      letterHeight = 5
      startTime = 7.0
      units = deg
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    PatchComponent patch_2
      image = sin
      mask = gauss
      pos = [2, 0]
      duration = 0.05
      startTime = 2.1
      units = deg
      sf = None
      size = [1.5, 1.5]
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    PatchComponent patch_3
      image = sin
      mask = gauss
      pos = [3, 0]
      duration = 0.05
      startTime = 2.2
      units = deg
      sf = None
      size = [1.5, 1.5]
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    PatchComponent patch_4
      image = sin
      mask = gauss
      pos = [4, 0]
      duration = 0.05
      startTime = 2.3
      units = deg
      sf = None
      size = [1.5, 1.5]
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    SoundComponent sound_3
      sound = tink.wav
      duration = 0.02
      startTime = 2.2
    SoundComponent sound_4
      sound = tink.wav
      duration = 0.02
      startTime = 2.3
    SoundComponent sound_5
      sound = tink.wav
      duration = 0.02
      startTime = 2.4
    PatchComponent patch_true
      image = sin
      mask = gauss
      pos = [4, 0]
      duration = 10.0
      startTime = 10.0
      units = deg
      sf = None
      size = [1.5, 1.5]
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Flow
  Routine trial
